CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:\\(?P<cell>[A-Za-z0-9]+)-(?P<treatment>[A-Za-z0-9]+)-(?P<hour>\d+(\.\d+)?)h-d(?P<dish>\d{1,2})-c(?P<concentration>\d+(\.\d+)?)¦Ìm\\(?P<site>[0-9]{1,2})$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'bf1': 'treatment', 'bf2': 'treatment', 'bf3': 'treatment', 'Cell': 'treatment'}, {'bf1': 'dish', 'bf2': 'dish', 'bf3': 'dish', 'Cell': 'dish'}, {'bf1': 'hour', 'bf2': 'hour', 'bf3': 'hour', 'Cell': 'hour'}, {'bf1': 'concentration', 'bf2': 'concentration', 'bf3': 'concentration', 'Cell': 'concentration'}, {'bf1': 'site', 'bf2': 'site', 'bf3': 'site', 'Cell': 'site'}]
    Image set matching method:Metadata
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "fmask.tif")
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    Name to assign these objects:Cell
    Select the image type:Objects
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    Select the rule criteria:and (file does contain "BF_1.tif")
    Name to assign these images:bf1
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "BF_2.tif")
    Name to assign these images:bf2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "BF_3.tif")
    Name to assign these images:bf3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:3
    Metadata category:cell
    Metadata category:treatment
    Metadata category:hour

RescaleIntensity:[module_num:5|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
    Select the input image:bf1
    Name the output image:RescaleIntensityBF1
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:6|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
    Select the input image:bf2
    Name the output image:RescaleIntensityBF2
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:7|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
    Select the input image:bf3
    Name the output image:RescaleIntensityBF3
    Rescaling method:Stretch each image to use the full intensity range
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
MeasureObjectSizeShape:[module_num:8|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
    Select object sets to measure:Cell
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:9|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
    Select images to measure:RescaleIntensityBF1, RescaleIntensityBF2, RescaleIntensityBF3
    Select objects to measure:Cell
    Enter how many gray levels to measure the texture at:256
    Hidden:4
    Measure whole images or objects?:Objects
    Texture scale to measure:3
    Texture scale to measure:5
    Texture scale to measure:10
    Texture scale to measure:20

ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Cell|Texture_SumAverage_RescaleIntensityBF1_5_02_256,Cell|Texture_SumAverage_RescaleIntensityBF1_5_03_256,Cell|Texture_SumAverage_RescaleIntensityBF1_5_00_256,Cell|Texture_SumAverage_RescaleIntensityBF1_5_01_256,Cell|Texture_SumAverage_RescaleIntensityBF1_10_00_256,Cell|Texture_SumAverage_RescaleIntensityBF1_10_03_256,Cell|Texture_SumAverage_RescaleIntensityBF1_10_02_256,Cell|Texture_SumAverage_RescaleIntensityBF1_10_01_256,Cell|Texture_SumAverage_RescaleIntensityBF1_3_03_256,Cell|Texture_SumAverage_RescaleIntensityBF1_3_01_256,Cell|Texture_SumAverage_RescaleIntensityBF1_3_00_256,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:FB_
    Overwrite existing files without warning?:Yes
    Data to export:Cell
    Combine these object measurements with those of the previous object?:No
    File name:BF.csv
    Use the object name for the file name?:No
