CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:\\(?P<cell>[A-Za-z0-9]+)-(?P<treatment>[A-Za-z0-9]+)-(?P<hour>\d+(\.\d+)?)h-d(?P<dish>\d{1,2})-c(?P<concentration>\d+(\.\d+)?)¦Ìm\\(?P<site>[0-9]{1,2})$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'bf1': 'cell', 'mit': 'cell', 'mmask': 'cell', 'bf2': 'cell', 'bf3': 'cell'}, {'bf1': 'treatment', 'mit': 'treatment', 'mmask': 'treatment', 'bf2': 'treatment', 'bf3': 'treatment'}, {'bf1': 'hour', 'mit': 'hour', 'mmask': 'hour', 'bf2': 'hour', 'bf3': 'hour'}, {'bf1': 'dish', 'mit': 'dish', 'mmask': 'dish', 'bf2': 'dish', 'bf3': 'dish'}, {'bf1': 'site', 'mit': 'site', 'mmask': 'site', 'bf2': 'site', 'bf3': 'site'}]
    Image set matching method:Metadata
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "Mit.tif")
    Name to assign these images:mit
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "BF_1")
    Name to assign these images:bf1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "BF_2")
    Name to assign these images:bf2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "BF_3")
    Name to assign these images:bf3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "mmask.jpg")
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    Name to assign these objects:mmask
    Select the image type:Objects
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:3
    Metadata category:cell
    Metadata category:treatment
    Metadata category:hour

FilterObjects:[module_num:5|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
    Select the objects to filter:mmask
    Name the output objects:MitFilterObjects
    Select the filtering mode:Image or mask border
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    Additional object count:0
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    Keep removed objects as a separate set?:No
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
MeasureGranularity:[module_num:6|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
    Select images to measure:mit
    Measure within objects?:Yes
    Select objects to measure:MitFilterObjects
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectIntensity:[module_num:7|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
    Select images to measure:mit
    Select objects to measure:MitFilterObjects

MeasureObjectNeighbors:[module_num:8|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
    Select objects to measure:MitFilterObjects
    Select neighboring objects to measure:MitFilterObjects
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensityDistribution:[module_num:9|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
    Select images to measure:mit
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:MitFilterObjects
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:10|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
    Select object sets to measure:MitFilterObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:11|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
    Select images to measure:mit
    Select objects to measure:MitFilterObjects
    Enter how many gray levels to measure the texture at:256
    Hidden:4
    Measure whole images or objects?:Both
    Texture scale to measure:3
    Texture scale to measure:5
    Texture scale to measure:10
    Texture scale to measure:20

FilterObjects:[module_num:12|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
    Select the objects to filter:mmask
    Name the output objects:MitObjects
    Select the filtering mode:Image or mask border
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    Additional object count:0
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    Keep removed objects as a separate set?:No
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
MeasureTexture:[module_num:13|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
    Select images to measure:bf1, bf2, bf3
    Select objects to measure:MitObjects
    Enter how many gray levels to measure the texture at:256
    Hidden:4
    Measure whole images or objects?:Objects
    Texture scale to measure:3
    Texture scale to measure:5
    Texture scale to measure:10
    Texture scale to measure:20

MeasureObjectSizeShape:[module_num:14|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
    Select object sets to measure:MitObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:15|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:MitObjects|AreaShape_Zernike_4_2,MitObjects|AreaShape_Zernike_4_0,MitObjects|AreaShape_Zernike_4_4,MitObjects|AreaShape_Zernike_9_5,MitObjects|AreaShape_Zernike_9_1,MitObjects|AreaShape_Zernike_9_7,MitObjects|AreaShape_Zernike_9_3,MitObjects|AreaShape_Zernike_9_9,MitObjects|AreaShape_Zernike_2_2,MitObjects|AreaShape_Zernike_2_0,MitObjects|AreaShape_Zernike_6_4,MitObjects|AreaShape_Zernike_6_0,MitObjects|AreaShape_Zernike_6_6,MitObjects|AreaShape_Zernike_6_2,MitObjects|AreaShape_Zernike_7_3,MitObjects|AreaShape_Zernike_7_7,MitObjects|AreaShape_Zernike_7_5,MitObjects|AreaShape_Zernike_7_1,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:Yes
    Data to export:MitObjects
    Combine these object measurements with those of the previous object?:No
    File name:BF.csv
    Use the object name for the file name?:No
    Data to export:MitFilterObjects
    Combine these object measurements with those of the previous object?:No
    File name:Mit.csv
    Use the object name for the file name?:No
