CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:22
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:\\(?P<cell>[A-Za-z0-9]+)-(?P<treatment>[A-Za-z0-9]+)-(?P<hour>\d+(\.\d+)?)h-d(?P<dish>\d{1,2})-c(?P<concentration>\d+(\.\d+)?)¦Ìm\\(?P<site>[0-9]{1,2})$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'bf1': 'treatment', 'Cell': 'treatment', 'nuclei': 'treatment', 'Nmask': 'treatment', 'mit': 'treatment', 'BF': 'treatment'}, {'bf1': 'dish', 'Cell': 'dish', 'nuclei': 'dish', 'Nmask': 'dish', 'mit': 'dish', 'BF': 'dish'}, {'bf1': 'hour', 'Cell': 'hour', 'nuclei': 'hour', 'Nmask': 'hour', 'mit': 'hour', 'BF': 'hour'}, {'bf1': 'concentration', 'Cell': 'concentration', 'nuclei': 'concentration', 'Nmask': 'concentration', 'mit': 'concentration', 'BF': 'concentration'}, {'bf1': 'site', 'Cell': 'site', 'nuclei': 'site', 'Nmask': 'site', 'mit': 'site', 'BF': 'site'}]
    Image set matching method:Metadata
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    Assignments count:6
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "fmask.tif")
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    Name to assign these objects:Cell
    Select the image type:Objects
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    Select the rule criteria:and (file does contain "fmask.tif")
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    Name to assign these objects:BF
    Select the image type:Objects
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    Select the rule criteria:and (file does contain "nmask")
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    Name to assign these objects:Nmask
    Select the image type:Objects
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    Select the rule criteria:and (file does contain "Mit.tif")
    Name to assign these images:mit
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "Hoechst.tif")
    Name to assign these images:nuclei
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "BF_1.tif")
    Name to assign these images:bf1
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:3
    Metadata category:cell
    Metadata category:treatment
    Metadata category:hour

RelateObjects:[module_num:5|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
    Parent objects:Cell
    Child objects:Nmask
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:NObjects
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
RescaleIntensity:[module_num:6|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
    Select the input image:bf1
    Name the output image:BFRescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:7|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
    Select the input image:mit
    Name the output image:MitRescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:8|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
    Select the input image:nuclei
    Name the output image:NucleiRescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:BF, Cell, NObjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:10|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
    Select images to measure:nuclei
    Select objects to measure:NObjects

MeasureObjectIntensity:[module_num:11|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
    Select images to measure:MitRescaleIntensity
    Select objects to measure:Cell

MeasureObjectIntensityDistribution:[module_num:12|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
    Select images to measure:MitRescaleIntensity
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cell
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectIntensityDistribution:[module_num:13|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
    Select images to measure:NucleiRescaleIntensity
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:NObjects
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectNeighbors:[module_num:14|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
    Select objects to measure:Cell
    Select neighboring objects to measure:Cell
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:15|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
    Select objects to measure:NObjects
    Select neighboring objects to measure:NObjects
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:16|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
    Select objects to measure:Nmask
    Select neighboring objects to measure:Cell
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureColocalization:[module_num:17|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
    Select images to measure:MitRescaleIntensity, NucleiRescaleIntensity
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:Cell, NObjects
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureGranularity:[module_num:18|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
    Select images to measure:MitRescaleIntensity, NucleiRescaleIntensity
    Measure within objects?:Yes
    Select objects to measure:Cell, NObjects
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureTexture:[module_num:19|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
    Select images to measure:MitRescaleIntensity
    Select objects to measure:Cell
    Enter how many gray levels to measure the texture at:256
    Hidden:4
    Measure whole images or objects?:Objects
    Texture scale to measure:3
    Texture scale to measure:5
    Texture scale to measure:10
    Texture scale to measure:25

MeasureTexture:[module_num:20|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
    Select images to measure:NucleiRescaleIntensity
    Select objects to measure:NObjects
    Enter how many gray levels to measure the texture at:256
    Hidden:4
    Measure whole images or objects?:Objects
    Texture scale to measure:3
    Texture scale to measure:5
    Texture scale to measure:10
    Texture scale to measure:25

MeasureTexture:[module_num:21|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
    Select images to measure:BFRescaleIntensity
    Select objects to measure:BF
    Enter how many gray levels to measure the texture at:256
    Hidden:4
    Measure whole images or objects?:Objects
    Texture scale to measure:3
    Texture scale to measure:5
    Texture scale to measure:10
    Texture scale to measure:25

ExportToSpreadsheet:[module_num:22|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:BF|AreaShape_Zernike_2_2,BF|AreaShape_Zernike_2_0,BF|AreaShape_Zernike_6_6,BF|AreaShape_Zernike_6_2,BF|AreaShape_Zernike_6_4,BF|AreaShape_Zernike_6_0,BF|AreaShape_Zernike_9_3,BF|AreaShape_Zernike_9_9,BF|AreaShape_Zernike_9_7,BF|AreaShape_Zernike_9_1,BF|AreaShape_Zernike_9_5,BF|AreaShape_Zernike_3_1,BF|AreaShape_Zernike_3_3,BF|AreaShape_Zernike_7_1,BF|AreaShape_Zernike_7_3,BF|AreaShape_Zernike_7_7,BF|AreaShape_Zernike_7_5,BF|AreaShape_Zernike_5_1,BF|AreaShape_Zernike_5_5,BF|AreaShape_Zernike_5_3,BF|AreaShape_Zernike_0_0,BF|AreaShape_Zernike_8_8,BF|AreaShape_Zernike_8_0,BF|AreaShape_Zernike_8_4,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:FMNB_
    Overwrite existing files without warning?:Yes
    Data to export:NObjects
    Combine these object measurements with those of the previous object?:No
    File name:Nuclei.csv
    Use the object name for the file name?:No
    Data to export:Cell
    Combine these object measurements with those of the previous object?:No
    File name:Mit.csv
    Use the object name for the file name?:No
    Data to export:BF
    Combine these object measurements with those of the previous object?:No
    File name:BF.csv
    Use the object name for the file name?:No
